PsychoPy2experiment version="2022.2.2"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'controller': '["klawiatura", "myszka"]', 'participant': 'test'}
  Full-screen window = False
  Monitor = lg
  Screen = 2
  Units = height
  Use version = latest
  Window size (pixels) = [1600, 900]
  expName = psycho-boilerplate
  keyboardBackend = ioHub
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Routines
  Routine instr_3
    TextComponent instr_text_3
      font = Times New Roman
      letterHeight = 0.06
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_texts[3]
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    TextComponent press_space_text_3
      font = Cambria
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_texts['continue'][c]
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    KeyboardComponent space_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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    MouseComponent mouse_continue_14
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.1
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    CodeComponent cedrus_continue_13
      Code Type = Py
      Each Frame:
        # cedrus_continue

        # kod dzięki któremu można przeklikiwać slajdy środkowym przyciskiem cedrusa

        if c == 2:
            cedrus.poll_for_response()
            while cedrus.has_response():
                response = cedrus.get_next_response()

                if response['pressed'] and response['key'] == 2:
                    continueRoutine = False
    ImageComponent image_3
      image = imgs/Animals_166_v.jpg
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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  Routine instr_1
    TextComponent instr_text_1
      font = Times New Roman
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      text [set every repeat] = $instr_texts[1]
      wrapWidth = 1
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    KeyboardComponent space_resp_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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    TextComponent press_space_text_1
      font = Cambria
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $device_texts['continue'][c]
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    MouseComponent mouse_continue_1
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.1
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    ImageComponent image_1
      image [set every repeat] = $IMAGE_FILES[0]
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Setup_and_instr_0
    CodeComponent setup_code
      Code Type = Py
      Begin Experiment:
        ###### setup_code ######

        # kontrolery i ich kody
        CONTROLLERS = {'klawiatura':0, 'k':0, '0':0,
                       'myszka':1, 'm':1, '1':1}


        # PLIKI Z OBRAZKAMI DO TRIALÓW:
        # jak wyżej: pierwsze z listy są dzieciaki, drugie dorośli
        # potem: pierwsza jest wersja z niebieskim pudelkiem po lewej
        IMAGE_FILES = {0: "imgs/cats.jpg",
                       1: "imgs/cats.jpg",
                       'control':"imgs/cats.jpg"}

        #g = expInfo['gender'].lower()   # expInfo ustalane jest w gui, na starcie
        # g niestety na potrzeby tego eksperymentu powinna byc f albo m
        #
        #if g != 'f' and g != 'm':
            # w przeciwnym wypadku jest przydzielana losowo
            # tak jak w prawdziwym życiu
        #    logging.warning(f"GENDER?!? Expected 'F' or 'M', got: '{g}'.\tZatem ustawiam losowy zestaw obrazków.")
        #    g = np.random.choice(['f','m'])

        # ustawiam kontroler:
        controller = expInfo['controller'].lower()
        try:
            c = CONTROLLERS[controller]

        except KeyError:
            logging.error(f"Niepoprawny kontroler: {controller}\t Dostepne opcje to {'/'.join(CONTROLLERS)}\nWylaczam sie.")
            logging.flush()
            core.quit()


        # WSZYSTKIE STRINGI Z TEKSTEM

        instr_texts = {0: "INSTR TEXT [0]", 1: "INSTR TEXT [1]"}

        device_texts = {'continue':["Wciśnij spację aby kontynuować.","Wciśnij dowolny przycisk myszy aby kontynuować.","Wciśnij środkowy przycisk aby kontynuować."],
                        'controls':["TEKST O TYM JAK KONTROLOWAĆ [0]",
                                    "TEKST O TYM JAK KONTROLOWAĆ [1]"]}
        #for i in range(len(device_texts['controls'])):
        #    device_texts['controls'][i]+='\nStaraj się odpowiedzieć najszybciej jak potrafisz.'

        S = {
            "pause_text": "Masz chwilę przerwy.\n"+device_texts['continue'][c].replace('.',' zadanie.'),
            "trial_text": "TRIAL TEXT",
            "begin_blocks": "Koniec bloku treningowego. Za chwilę rozpoczniesz właściwą część zadania.",
            "begin_training": "Za chwilę rozpoczniesz blok treningowy.",
            "goodbye_text": "Dziękujemy za udział w eksperymencie.",

        }

        # pomocne zmienne
        corrects = 0
        trials = None
    CodeComponent cedrus_setup
      Code Type = Py
      Begin Experiment:
        #
        ###### cedrus_setup ######
        #
        #import pyxid2 as pyxid
        #
        #if c == 2:
        #    # szukamy urządzenia:
        #    cedrusTimer = core.Clock()
        #    while cedrusTimer.getTime() < 5:    # czekamy max 5 sekundy na objawienie sie sprzętu
        #
        #        devices = pyxid.get_xid_devices()
        #        if len(devices) > 0:
        #            cedrus = devices[0]
        #            logging.info(f"Znaleziony kontroler to {cedrus.device_name}")
        #            break
        #        else:
        #            core.wait(0.1)
        #    else:
        #        logging.warning("Nie znaleziono zadnego sprzetu XID.")
        #        core.quit()
        #
        #    # konkretnie szukamy Cedrusa RB-530
        #    if cedrus.is_response_device() and cedrus.device_name == 'Cedrus RB-530':
        #        cedrus.reset_base_timer()
        #        cedrus.reset_rt_timer()
        #    else:
        #        logging.warning("Znaleziony urzadzenie XID nie jest wlasciwym kontrolerem do tego zadania.")
        #        core.quit()
        #
    TextComponent instr_text_0
      font = Times New Roman
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instr_texts[0]
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    TextComponent press_space_text_6
      font = Cambria
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_texts['continue'][c]
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    KeyboardComponent space_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.1
      store = nothing
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    MouseComponent mouse_continue
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.1
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    CodeComponent cedrus_continue
      Code Type = Py
      Each Frame:
        #
        # cedrus_continue
        #
        # kod dzięki któremu można przeklikiwać slajdy środkowym przyciskiem cedrusa

        #if c == 2:
        #    cedrus.poll_for_response()
        #    while cedrus.has_response():
        #        response = cedrus.get_next_response()
        #
        #        if response['pressed'] and response['key'] == 2:
        #            continueRoutine = False
  Routine Fixation
    PolygonComponent cross
      fillColor = $[1,1,1]
      saveStartStop = False
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.4
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    CodeComponent trial_setup
      Code Type = Py
      Begin Experiment:
        control = False
      Begin Routine:
        ###### trial_setup ######

        pauseText = S["pause_text"]
        trialText = S["trial_text"]

        hadResponse = False

        if trainingDone:

            tHandler = trials
            trialNum = tHandler.thisN + len(trials.trialList) * blocks.thisN
            logging.info(
                    f"trials.nTotal = {trials.nTotal}\n\
                    trials.nRemaining = {trials.nRemaining}\n\
                    trials.thisN = {trials.thisN}\n\
                    trials.thisRepN = {trials.thisRepN}\n\
                    trials.thisTrialN = {trials.thisTrialN}\n\
                    blocks.nTotal = {blocks.nTotal}\n\
                    blocks.nRemaining = {blocks.nRemaining}\n\
                    blocks.thisN = {blocks.thisN}\n\
                    blocks.thisRepN = {blocks.thisRepN}\n\
                    blocks.thisTrialN = {blocks.thisTrialN}\n"\
                    )
            if blocks.thisN == blocks.nTotal- 1:
                pauseText = f"To już koniec zadania.\n {device_texts['continue'][c]}"
        else:
            tHandler = training
            trialNum = tHandler.thisN


        # tHandler.addData('food', food)  # zapisuję jedzenie do csv, czemu by nie.

        imgFile = IMAGE_FILES[group][stimulus]

        # przypadek dla kontrolnego trialu
        if control:
            imgFile = IMAGE_FILES['control']
  Routine Trial
    TextComponent trial_text
      font = Times New Roman
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.2
      text [set every repeat] = $trialText
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    ImageComponent trial_image
      image [set every repeat] = $IMAGE_FILES[1]
      pos = (0,-0.05)
      saveStartStop = False
      size = 0.8
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 1.5
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    KeyboardComponent key_resp
      allowedKeys = 'q','p'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 1.5
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    MouseComponent mouse_resp
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 1.6
      stopVal [duration (s)] = 1.5
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    CodeComponent cedrus_resp
      Code Type = Py
      Begin Routine:
        timer = core.Clock()
        timer.addTime(1.6)  # 1.6 s czyli czas od rozpoczęcia routine do momentu pojawienia sie obrazka
      Each Frame:
        # ten kod sprawdza czy dostalismy odpowiedź na cedrusie

        if c == 2:
            cedrus.poll_for_response()
            if cedrus.response_queue_size() > 0:
                response = cedrus.get_next_response()
        #        logging.exp(f"Cedrus response: {response} at t={timer.getTime()}. remaining responses in queue = {cedrus.response_queue_size()}")
                if response['pressed']:
                    logging.exp(f"Got a cedrus keypress: {response['key']} at t={timer.getTime()}")

                # jeśli minęło już 1.6s to możemy faktycznie akceptować odpowiedzi
                    if timer.getTime() > 0:
                        tHandler.addData('cedrus.keyPressed',response['key'])
                        tHandler.addData('responseTime',timer.getTime())

                        # 1 to lewy, 3 to prawy, pozostałe ignorujemy
                        if response['key'] == 1:
                            continueRoutine = False
                            hadResponse = True
                            corrects += corrAns == 'q'
                            tHandler.addData('responseCorrect', int(corrAns == 'q'))
                            cedrus.clear_response_queue()

                        elif response['key'] == 3:
                            continueRoutine = False
                            hadResponse = True
                            corrects += corrAns == 'p'
                            tHandler.addData('responseCorrect', int(corrAns == 'p'))
                            cedrus.clear_response_queue()
    CodeComponent counter
      Code Type = Py
      End Routine:
        ###### counter ######

        # ten kod liczy poprawne odpowiedzi i zapisuje dane

        if not hadResponse:
            # odpowiedzi z klawiatury:
            if key_resp.keys:
                hadResponse = True
                # corrects += key_resp.corr
                tHandler.addData('responseTime',key_resp.rt)

            # z myszki:
            elif sum(mouse_resp.getPressed()) == 1:
                hadResponse = True
                tHandler.addData('responseTime', mouse_resp.time[0])

        if not hadResponse:
            # brak odpowiedzi
            tHandler.addData('responseCorrect', 99)

        print(f"{tHandler.name}#{trialNum} | poprawnych odpowiedzi: {corrects}")

        ############
  Routine begin_Training
    KeyboardComponent space_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent begin_training_text
      font = Times New Roman
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $S['begin_training']
      wrapWidth = 1.1
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    MouseComponent mouse_continue_13
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent press_space_text_12
      font = Cambria
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_texts['continue'][c]
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    CodeComponent cedrus_continue_12
      Code Type = Py
      Each Frame:
        # cedrus_continue

        # kod dzięki któremu można przeklikiwać slajdy środkowym przyciskiem cedrusa

        if c == 2:
            cedrus.poll_for_response()
            while cedrus.has_response():
                response = cedrus.get_next_response()

                if response['pressed'] and response['key'] == 2:
                    continueRoutine = False
  Routine Training_results
    TextComponent results_text_2
      font = Cambria
      letterHeight = 0.05
      pos = (-0.1, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $correctsMessage
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    CodeComponent training_results_code
      Code Type = Py
      Begin Experiment:
        trainingDone = False
      Begin Routine:
        correctsMessage = f"Poprawnych odpowiedzi:{corrects}/{len(training.trialList)}"
        corrects = 0
        t = trials
        trainingDone = True
    KeyboardComponent space_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent press_space_text_10
      font = Cambria
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = $device_texts['continue'][c]
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    MouseComponent mouse_continue_12
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent cedrus_continue_11
      Code Type = Py
      Each Frame:
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  Routine begin_Blocks
    TextComponent pause_text_2
      font = Times New Roman
      letterHeight = 0.06
      pos = (-0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $S['begin_blocks']
      wrapWidth = 1.2
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    KeyboardComponent space_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse_continue_9
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent press_space_text_11
      font = Cambria
      letterHeight = 0.04
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $device_texts['continue'][c]
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    CodeComponent cedrus_continue_8
      Code Type = Py
      Each Frame:
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  Routine Pause_2
    TextComponent pause_text
      font = Times New Roman
      letterHeight = 0.06
      pos = (-0.25, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $pauseText
      wrapWidth = 1
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    KeyboardComponent space_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse_continue_8
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent cedrus_continue_7
      Code Type = Py
      Each Frame:
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  Routine Results
    TextComponent results_text
      font = Cambria
      letterHeight = 0.05
      pos = (-0.1, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $resultsText
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    CodeComponent results_code
      Code Type = Py
      Begin Routine:
        import random

        resultsText = f"Twój wynik to: {random.randint(0, 10)}"
    KeyboardComponent space_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    MouseComponent mouse_continue_4
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Goodbye
    MouseComponent mouse_continue_5
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent space_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent goodbye_text
      font = Times New Roman
      letterHeight = 0.06
      pos = (-0.25, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $S['goodbye_text']
      wrapWidth = 1
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Flow
  Routine Setup_and_instr_0
  Routine instr_1
  Routine begin_Training
  LoopInitiator training loopType="TrialHandler"
    conditionsFile = training.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('group', 0), ('stimulus', 1)]),
      OrderedDict([('group', 1), ('stimulus', 0)])]
    Routine Fixation
    Routine Trial
  LoopTerminator training
  Routine Training_results
  Routine begin_Blocks
  LoopInitiator blocks loopType="TrialHandler"
    conditionsFile = blocks.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('group', 0)]),
      OrderedDict([('group', 1)])]
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = trials.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('stimulus', 0)]),
        OrderedDict([('stimulus', 1)])]
      Routine Fixation
      Routine Trial
    LoopTerminator trials
    Routine Pause_2
  LoopTerminator blocks
  Routine Results
  Routine Goodbye
